# Generated by Configurator on Thu Apr 23 19:15:25 CEST 2026

# Reset
Property,Core,Initialize,0

# Devices
Device,CellCam,CellCam,CellCam

# Pre-init settings for devices
Property,CellCam,Camera ID,CC220308085539492B3C03A887CCBFB

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,CellCam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,CellCam,Binning,3
ConfigGroup,System,Startup,CellCam,Binning Mode,Average
ConfigGroup,System,Startup,CellCam,Safe Software Trigger,Enabled